PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Data filename = u'data/%s' % (expInfo['participant'])
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stims/runs/run_practice.csv', 'stims/practice/1.jpg', 'stims/practice/2.jpg', 'stims/practice/3.jpg', 'stims/practice/4.jpg', 'stims/practice/5.jpg', 'stims/practice/6.jpg', 'stims/practice/7.jpg', 'stims/practice/8.jpg', 'stims/practice/9.jpg', 'stims/practice/10.jpg', 'stims/practice/11.jpg', 'stims/practice/12.jpg', 'stims/practice/13.jpg', 'stims/practice/14.jpg', 'stims/practice/15.jpg', 'stims/practice/16.jpg', 'stims/runs/images/1-alt.jpg', 'stims/runs/images/1.jpg', 'stims/runs/images/2-alt.jpg', 'stims/runs/images/2.jpg', 'stims/runs/images/3-alt.jpg', 'stims/runs/images/3.jpg', 'stims/runs/images/4-alt.jpg', 'stims/runs/images/4.jpg', 'stims/runs/images/5-alt.jpg', 'stims/runs/images/5.jpg', 'stims/runs/images/6-alt.jpg', 'stims/runs/images/6.jpg', 'stims/runs/images/7-alt.jpg', 'stims/runs/images/7.jpg', 'stims/runs/images/8-alt.jpg', 'stims/runs/images/8.jpg', 'stims/runs/images/9-alt.jpg', 'stims/runs/images/9.jpg', 'stims/runs/images/10-alt.jpg', 'stims/runs/images/10.jpg', 'stims/runs/images/11-alt.jpg', 'stims/runs/images/11.jpg', 'stims/runs/images/12-alt.jpg', 'stims/runs/images/12.jpg', 'stims/runs/images/13-alt.jpg', 'stims/runs/images/13.jpg', 'stims/runs/images/14-alt.jpg', 'stims/runs/images/14.jpg', 'stims/runs/images/15-alt.jpg', 'stims/runs/images/15.jpg', 'stims/runs/images/16-alt.jpg', 'stims/runs/images/16.jpg', 'stims/runs/images/17-alt.jpg', 'stims/runs/images/17.jpg', 'stims/runs/images/18-alt.jpg', 'stims/runs/images/18.jpg', 'stims/runs/images/19-alt.jpg', 'stims/runs/images/19.jpg', 'stims/runs/images/20-alt.jpg', 'stims/runs/images/20.jpg', 'stims/counterbalance/word_on_left_full.jpg', 'stims/counterbalance/word_on_right_full.jpg', 'stims/instructions/instructions_A.csv', 'stims/instructions/instructions_D.csv', 'stims/instructions/instructions_2A.csv', 'stims/instructions/instructions_2D.csv', 'stims/runs/unique_subset_1.csv', 'stims/runs/unique_subset_12.csv', 'stims/runs/unique_subset_2.csv', 'stims/runs/unique_subset_3.csv', 'stims/runs/unique_subset_4.csv', 'stims/runs/unique_subset_5.csv', 'stims/runs/unique_subset_6.csv', 'stims/runs/unique_subset_7.csv', 'stims/runs/unique_subset_8.csv', 'stims/runs/unique_subset_9.csv', 'stims/runs/unique_subset_10.csv', 'stims/runs/unique_subset_11.csv', 'stims/counterbalance/good_on_left.jpg', 'stims/counterbalance/good_on_right.jpg', 'stims/counterbalance/word_on_left.jpg', 'stims/counterbalance/word_on_right.jpg', 'stims/runs/images/1.jpg', 'stims/runs/images/2.jpg', 'stims/runs/images/3.jpg', 'stims/runs/images/4.jpg', 'stims/runs/images/5.jpg', 'stims/runs/images/6.jpg', 'stims/runs/images/7.jpg', 'stims/runs/images/8.jpg', 'stims/runs/images/9.jpg', 'stims/runs/images/10.jpg', 'stims/runs/images/11.jpg', 'stims/runs/images/12.jpg', 'stims/runs/images/13.jpg', 'stims/runs/images/14.jpg', 'stims/runs/images/15.jpg', 'stims/runs/images/16.jpg', 'stims/runs/images/17.jpg', 'stims/runs/images/18.jpg', 'stims/runs/images/19.jpg', 'stims/runs/images/20.jpg', 'stims/fixation_cross.jpg']
  Save csv file = True
  Screen = 1
  Units = height
  Use version = 2022.2.5
  Window size (pixels) = [1440, 900]
  color = [1, 1, 1]
  expName = task_v3
  keyboardBackend = Pyglet
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Routines
  Routine welcome
    TextComponent instructs_txt
      color = -1.0000, -1.0000, -1.0000
      font = Helvetica
      letterHeight = instruction_text_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_list[current_instr]
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    TextComponent space_remind
      color = 0.0039, 0.0039, 0.0039
      font = Helvetica
      letterHeight = space_reminder_text_size
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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    KeyboardComponent space_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent instructs_code
      Code Type = Both
      Before Experiment:
        current_instr = 0
      Before JS Experiment:
        let current_instr = 0;
      Begin Experiment:
        instruction_line = ""
        instr_list = []
        if word_is_left == 1:
            instr_csv = f'{stim_dir}/instructions/instructions_A.csv'
        else:
            instr_csv = f'{stim_dir}/instructions/instructions_B.csv'
        instr_obj = data.TrialHandler(nReps=1,
            method='sequential',
            extraInfo=expInfo,
            originPath=-1,
            trialList=instr_csv,
            seed=None,
            name='instr_obj')
        instr_file = instr_obj.trialList
        instr_num = len(instr_file)
        for i in range(instr_num):
            instruction_line = instr_file[i]["instr_list"]
            print(instruction_line)
            instr_list.append(instruction_line)
      Begin JS Experiment:
        instruction_line = ""
        instr_list = []
        if (word_is_left === 1) {
            instr_csv = `${stim_dir}/instructions/instructions_A.csv`;
        } else if (word_is_left === 2) {
            instr_csv = `${stim_dir}/instructions/instructions_D.csv`;
        }

        instr_obj = new TrialHandler({
         psychoJS: psychoJS,
         nReps: 1, method: TrialHandler.Method.SEQUENTIAL,
         extraInfo: expInfo, originPath: undefined,
         trialList: instr_csv,
         seed: undefined, name: 'instr_obj'
        });

        instr_file = instr_obj.getTrialList()
        instr_num = instr_file.length
        for (var i, _pj_c = 0, _pj_a = util.range(instr_num), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            instruction_line = instr_file[i]["instr_list"]
            instr_list.push(instruction_line)
        }
      End JS Routine:
        current_instr += 1;
      End Routine:
        current_instr += 1
  Routine init_code
    CodeComponent no_mobile
      Code Type = JS
      Before JS Experiment:
        /* Automatically exit if the experiment is running on a mobile device */
        if( /Android|webOS|iPhone|iPad|iPod|BlackBerry|IEMobile|Opera Mini/i.test(navigator.userAgent) ) {
          quitPsychoJS('Unfortunately, this study cannot be run on a mobile device!', true)
        }
    CodeComponent js_functions
      Code Type = JS
      Before JS Experiment:
        /* functions to replace functions from python packages
        that don't work in javascript*/



        function SeededRNG(seed) {
            this.m = 0x80000000; // 2^31;
            this.a = 1103515245;
            this.c = 12345;
            this.state = seed ? seed % (this.m - 1) : 123456789; // seed
            this.next = function() {
                this.state = (this.a * this.state + this.c) % this.m;
                return this.state / this.m;
            };
        }

        function seededShuffle(array, seed) {
            const rng = new SeededRNG(seed);
            let currentIndex = array.length, temporaryValue, randomIndex;

            while (currentIndex !== 0) {
                randomIndex = Math.floor(rng.next() * currentIndex);
                currentIndex -= 1;

                temporaryValue = array[currentIndex];
                array[currentIndex] = array[randomIndex];
                array[randomIndex] = temporaryValue;
            }

            return array;
        }



        /*
        // A custom shuffle function that uses a seeded random number generator
        function seededShuffle(array, seed) {
            let rng = Math.seedrandom(seed);

            for (let i = array.length - 1; i > 0; i--) {
                const j = Math.floor(rng() * (i + 1));
                [array[i], array[j]] = [array[j], array[i]];  // swap elements
            }
        }
        */

        /*
        function new_shuffle(array, seed) {
          var m = array.length, t, i;

          // While there remain elements to shuffle…
          while (m) {
            // Pick a remaining element…
            i = Math.floor(my_random(seed) * m);
            seed++;  // increment the seed for the next iteration

            // Decrease m for the next iteration
            m--;

            // And swap it with the current element.
            t = array[m];
            array[m] = array[i];
            array[i] = t;
          }

          return array;
        }
        */

        /*
        function my_random(seed) {
          var x = Math.sin(seed + 1) * 10000; // increment seed here to make the function pure
          return x - Math.floor(x);
        }
        */

        function list(s) {
                    // if s is a string, we return a list of its characters
                    if (typeof s === 'string')
                        return s.split('');
                    else
                        // otherwise we return s:
                        return s;
                }
    CodeComponent js_seed_random
      Code Type = JS
      disabled = True
      Before JS Experiment:
        /*
        Copyright 2019 David Bau.

        Permission is hereby granted, free of charge, to any person obtaining
        a copy of this software and associated documentation files (the
        "Software"), to deal in the Software without restriction, including
        without limitation the rights to use, copy, modify, merge, publish,
        distribute, sublicense, and/or sell copies of the Software, and to
        permit persons to whom the Software is furnished to do so, subject to
        the following conditions:

        The above copyright notice and this permission notice shall be
        included in all copies or substantial portions of the Software.

        THE SOFTWARE IS PROVIDED "AS IS", WITHOUT WARRANTY OF ANY KIND,
        EXPRESS OR IMPLIED, INCLUDING BUT NOT LIMITED TO THE WARRANTIES OF
        MERCHANTABILITY, FITNESS FOR A PARTICULAR PURPOSE AND NONINFRINGEMENT.
        IN NO EVENT SHALL THE AUTHORS OR COPYRIGHT HOLDERS BE LIABLE FOR ANY
        CLAIM, DAMAGES OR OTHER LIABILITY, WHETHER IN AN ACTION OF CONTRACT,
        TORT OR OTHERWISE, ARISING FROM, OUT OF OR IN CONNECTION WITH THE
        SOFTWARE OR THE USE OR OTHER DEALINGS IN THE SOFTWARE.

        */

        (function (global, pool, math) {
        //
        // The following constants are related to IEEE 754 limits.
        //

        var width = 256,        // each RC4 output is 0 <= x < 256
            chunks = 6,         // at least six RC4 outputs for each double
            digits = 52,        // there are 52 significant digits in a double
            rngname = 'random', // rngname: name for Math.random and Math.seedrandom
            startdenom = math.pow(width, chunks),
            significance = math.pow(2, digits),
            overflow = significance * 2,
            mask = width - 1,
            nodecrypto;         // node.js crypto module, initialized at the bottom.

        //
        // seedrandom()
        // This is the seedrandom function described above.
        //
        function seedrandom(seed, options, callback) {
          var key = [];
          options = (options == true) ? { entropy: true } : (options || {});

          // Flatten the seed string or build one from local entropy if needed.
          var shortseed = mixkey(flatten(
            options.entropy ? [seed, tostring(pool)] :
            (seed == null) ? autoseed() : seed, 3), key);

          // Use the seed to initialize an ARC4 generator.
          var arc4 = new ARC4(key);

          // This function returns a random double in [0, 1) that contains
          // randomness in every bit of the mantissa of the IEEE 754 value.
          var prng = function() {
            var n = arc4.g(chunks),             // Start with a numerator n < 2 ^ 48
                d = startdenom,                 //   and denominator d = 2 ^ 48.
                x = 0;                          //   and no 'extra last byte'.
            while (n < significance) {          // Fill up all significant digits by
              n = (n + x) * width;              //   shifting numerator and
              d *= width;                       //   denominator and generating a
              x = arc4.g(1);                    //   new least-significant-byte.
            }
            while (n >= overflow) {             // To avoid rounding up, before adding
              n /= 2;                           //   last byte, shift everything
              d /= 2;                           //   right using integer math until
              x >>>= 1;                         //   we have exactly the desired bits.
            }
            return (n + x) / d;                 // Form the number within [0, 1).
          };

          prng.int32 = function() { return arc4.g(4) | 0; }
          prng.quick = function() { return arc4.g(4) / 0x100000000; }
          prng.double = prng;

          // Mix the randomness into accumulated entropy.
          mixkey(tostring(arc4.S), pool);

          // Calling convention: what to return as a function of prng, seed, is_math.
          return (options.pass || callback ||
              function(prng, seed, is_math_call, state) {
                if (state) {
                  // Load the arc4 state from the given state if it has an S array.
                  if (state.S) { copy(state, arc4); }
                  // Only provide the .state method if requested via options.state.
                  prng.state = function() { return copy(arc4, {}); }
                }

                // If called as a method of Math (Math.seedrandom()), mutate
                // Math.random because that is how seedrandom.js has worked since v1.0.
                if (is_math_call) { math[rngname] = prng; return seed; }

                // Otherwise, it is a newer calling convention, so return the
                // prng directly.
                else return prng;
              })(
          prng,
          shortseed,
          'global' in options ? options.global : (this == math),
          options.state);
        }

        //
        // ARC4
        //
        // An ARC4 implementation.  The constructor takes a key in the form of
        // an array of at most (width) integers that should be 0 <= x < (width).
        //
        // The g(count) method returns a pseudorandom integer that concatenates
        // the next (count) outputs from ARC4.  Its return value is a number x
        // that is in the range 0 <= x < (width ^ count).
        //
        function ARC4(key) {
          var t, keylen = key.length,
              me = this, i = 0, j = me.i = me.j = 0, s = me.S = [];

          // The empty key [] is treated as [0].
          if (!keylen) { key = [keylen++]; }

          // Set up S using the standard key scheduling algorithm.
          while (i < width) {
            s[i] = i++;
          }
          for (i = 0; i < width; i++) {
            s[i] = s[j = mask & (j + key[i % keylen] + (t = s[i]))];
            s[j] = t;
          }

          // The "g" method returns the next (count) outputs as one number.
          (me.g = function(count) {
            // Using instance members instead of closure state nearly doubles speed.
            var t, r = 0,
                i = me.i, j = me.j, s = me.S;
            while (count--) {
              t = s[i = mask & (i + 1)];
              r = r * width + s[mask & ((s[i] = s[j = mask & (j + t)]) + (s[j] = t))];
            }
            me.i = i; me.j = j;
            return r;
            // For robust unpredictability, the function call below automatically
            // discards an initial batch of values.  This is called RC4-drop[256].
            // See http://google.com/search?q=rsa+fluhrer+response&btnI
          })(width);
        }

        //
        // copy()
        // Copies internal state of ARC4 to or from a plain object.
        //
        function copy(f, t) {
          t.i = f.i;
          t.j = f.j;
          t.S = f.S.slice();
          return t;
        };

        //
        // flatten()
        // Converts an object tree to nested arrays of strings.
        //
        function flatten(obj, depth) {
          var result = [], typ = (typeof obj), prop;
          if (depth && typ == 'object') {
            for (prop in obj) {
              try { result.push(flatten(obj[prop], depth - 1)); } catch (e) {}
            }
          }
          return (result.length ? result : typ == 'string' ? obj : obj + '\0');
        }

        //
        // mixkey()
        // Mixes a string seed into a key that is an array of integers, and
        // returns a shortened string seed that is equivalent to the result key.
        //
        function mixkey(seed, key) {
          var stringseed = seed + '', smear, j = 0;
          while (j < stringseed.length) {
            key[mask & j] =
              mask & ((smear ^= key[mask & j] * 19) + stringseed.charCodeAt(j++));
          }
          return tostring(key);
        }

        //
        // autoseed()
        // Returns an object for autoseeding, using window.crypto and Node crypto
        // module if available.
        //
        function autoseed() {
          try {
            var out;
            if (nodecrypto && (out = nodecrypto.randomBytes)) {
              // The use of 'out' to remember randomBytes makes tight minified code.
              out = out(width);
            } else {
              out = new Uint8Array(width);
              (global.crypto || global.msCrypto).getRandomValues(out);
            }
            return tostring(out);
          } catch (e) {
            var browser = global.navigator,
                plugins = browser && browser.plugins;
            return [+new Date, global, plugins, global.screen, tostring(pool)];
          }
        }

        //
        // tostring()
        // Converts an array of charcodes to a string
        //
        function tostring(a) {
          return String.fromCharCode.apply(0, a);
        }

        //
        // When seedrandom.js is loaded, we immediately mix a few bits
        // from the built-in RNG into the entropy pool.  Because we do
        // not want to interfere with deterministic PRNG state later,
        // seedrandom will not call math.random on its own again after
        // initialization.
        //
        mixkey(math.random(), pool);

        //
        // Nodejs and AMD support: export the implementation as a module using
        // either convention.
        //
        if ((typeof module) == 'object' && module.exports) {
          module.exports = seedrandom;
          // When in node.js, try using crypto package for autoseeding.
          try {
            nodecrypto = require('crypto');
          } catch (ex) {}
        } else if ((typeof define) == 'function' && define.amd) {
          define(function() { return seedrandom; });
        } else {
          // When included as a plain script, set up Math.seedrandom global.
          math['seed' + rngname] = seedrandom;
        }


        // End anonymous scope, and pass initial values.
        })(
          // global: `self` in browsers (including strict mode and web workers),
          // otherwise `this` in Node and other environments
          (typeof self !== 'undefined') ? self : this,
          [],     // pool: entropy pool starts empty
          Math    // math: package containing random, pow, and seedrandom
        );
    CodeComponent py_paths
      Code Type = Both
      Before Experiment:
        task_dir = os.getcwd()
        stim_dir = f'{task_dir}/stims'
    CodeComponent get_run_files
      Code Type = Both
      Before Experiment:
        # select pre-created run files
        # the order of runs will be randomized
        # the order of images within runs will also be randomized
        import random
        from psychopy import event
        run_files = ['runs/run_1.csv',
        'runs/run_2.csv',
        'runs/run_3.csv',
        'runs/run_4.csv',
        'runs/run_5.csv',
        'runs/run_6.csv',
        'runs/run_7.csv',
        'runs/run_8.csv',
        'runs/run_9.csv',
        'runs/run_10.csv',
        'runs/run_11.csv',
        'runs/run_12.csv',
        'runs/run_13.csv',
        'runs/run_14.csv',
        'runs/run_15.csv',
        'runs/run_16.csv',
        'runs/run_17.csv',
        'runs/run_18.csv',
        'runs/run_19.csv',
        'runs/run_20.csv']
        n_runs = len(run_files)
        n_trials = 16
      Before JS Experiment:
        const stim_dir = 'stims';
        const n_runs = 9;
        //const n_selected_runs = 12; // runs to display
        const n_trials = 10;
        const n_practice = 12;
      Begin Experiment:
        # save participant id (as integer)
        # then shuffle run order
        pid = expInfo['participant']
        pid=int(pid)
        word_is_left = pid%2
        random.seed(pid)
        run_index = list(range(n_runs))
        random.shuffle(run_index)
        image_seeds = random.sample(range(0, 1000), 20)
        random.shuffle(image_seeds)
      Begin JS Experiment:
        run_files = ['runs/unique_subset_1.csv',
        'runs/unique_subset_2.csv',
        'runs/unique_subset_3.csv',
        'runs/unique_subset_4.csv',
        'runs/unique_subset_5.csv',
        'runs/unique_subset_6.csv',
        'runs/unique_subset_7.csv',
        'runs/unique_subset_8.csv',
        'runs/unique_subset_9.csv',
        'runs/unique_subset_10.csv',
        'runs/unique_subset_11.csv',
        'runs/unique_subset_12.csv'];

        /* using PID as seed, create array of 6 numbers
        these 6 numbers will be used as seeds
        to generate a unique image order for each run */
        // Attempt to parse participant ID
        pid = parseInt(expInfo['participant']);

        // Check if parsing was unsuccessful (result is NaN)
        if (isNaN(pid)) {
            // Alert the participant
            alert("Invalid participant ID. Please refresh the page and enter a valid number.");

            // Optionally, you can end the experiment or redirect them to the start
            document.location.reload(); // This will refresh the page
        }

        // word_is_left = (pid % 2);
        word_is_left = (pid % 2) + 1

        // Shuffle run_files using pid as seed
        run_files = seededShuffle(run_files, pid);
        console.log("seeded shuffled runs: ", run_files)
    CodeComponent set_vars
      Code Type = Both
      Before Experiment:
        word_position = [0, 0]
        image_position = [0, 0]
        pr_remind_position = [0, -0.2]
        instruction_text_size = 0.06
        space_reminder_text_size = 0.045
        stim_text_size = 0.1
        base_word_time = 1.5
        base_image_time = 1.5
        target_word_time = 1.5
        fixation_time = 1.5
        base_image_start = fixation_time + 0.2
        base_word_start = base_image_start + base_image_time + 0.1
        target_word_start = 0.2 + base_image_time
      Before JS Experiment:
        let word_position = [0, 0]
        let image_position = [0, 0]
        let pr_remind_position = [0, -0.2]
        let instruction_text_size = 0.06
        let space_reminder_text_size = 0.045
        let stim_text_size = 0.1
        let base_word_time = 2
        let base_image_time = 1.5
        let target_word_time = 2
        let fixation_time = 1.5
        let base_image_start = fixation_time + 0.2
        let base_word_start = base_image_start + base_image_time + 0.1
        let target_word_start = .2 // changed from 0.2 + base_image_time
      Begin Experiment:
        from psychopy.hardware import keyboard
        from psychopy import core
  Routine run_code
    CodeComponent get_run_info
      Code Type = Both
      Begin Experiment:
        # initialize counters
        run_counter = 0
        trial_within_experiment = 0
        base_image = ""
        base_word = ""
        target_word = ""
        target_condition = ""
        correct_answer_1 = ""
        correct_answer_2 = ""
        end_run_msg = ""
        base_images = []
        base_words = []
        target_words = []
        target_conditions = []
        correct_answers_1 = []
        correct_answers_2 = []
        image_opacity = 1
      Begin JS Experiment:
        seeds = [];
        seedForRun = 0;
        for (let i = 1; i <= n_runs; i++) {
            console.log("i is", i);
            seedForRun = generateRunSeed(pid, i);
            console.log(seedForRun);
            seeds.push(seedForRun);
        }

        console.log(seeds);

        /* initialize counters */
        run_counter = 0;
        trial_within_experiment = 0;
        base_image = "";
        base_word = "";
        target_word = "";
        target_condition = "";
        correct_answer_1 = "";
        correct_answer_2 = "";
        end_run_msg = "";
        base_images = [];
        base_words = [];
        target_words = [];
        target_conditions = [];
        correct_answers_1 = [];
        correct_answers_2 = [];
        image_opacity = 1;
      Begin JS Routine:
        // increment counter to reflect new run
        kb_msg = "Thank you for not making key presses before the words!";
        missed_msg = "Thank you for responding to at least 85% of the words!";

        /* Create an empty list to store the trial-by-trial key presses */
        key_presses = [];

        trial_within_run = 0;
        run_counter += 1;
        run_percent = Math.round((run_counter / n_runs) * 100);
        if (run_counter < n_runs) {
            end_run_msg = "You have now finished " + run_percent.toString() + "% of the task! Please continue to press the 'A' and 'L' keys as quickly as you can when you see the words.";
        } else {
            end_run_msg = "You have now finished the task!";
            image_opacity = 0;
        }
      Begin Routine:
        # increment counter to reflect new run
        kb_msg = "Thank you for not making key presses before the words!"
        missed_msg = "Thank you for responding to at least 85% of the words!"
        # Create an empty list to store the trial-by-trial key presses
        key_presses = []

        trial_within_run = 0
        run_position = run_counter
        run_counter += 1
        run_percent = (run_counter / 20) * 100
        if (run_counter < n_runs):
            end_run_msg = "You have now finished " + str(run_percent) + "% of the task! Please continue to press the 'A' and 'L' keys as quickly as you can to indicate whether the target word is a good or bad description of the image."
        else:
            end_run_msg = "You have now finished the task!"
            image_opacity = 0

        # get run information
        current_run = run_index[run_position]
        run_file = run_files[current_run]

        run_stim = data.TrialHandler(nReps=1,
            method='sequential',
            extraInfo=expInfo,
            originPath=-1,
            trialList=data.importConditions(f'{stim_dir}/' + run_file),
            seed=None,
            name='run_stim')

        stim_list = run_stim.trialList
        trial_index = list(range(n_trials))
        # pid is used to generate individualized seeds
        # this allows randomized image orders for all runs
        # change seed below to pid for consistent image order
        random.seed(image_seeds[run_position])
        random.shuffle(trial_index)

        for i in range(len(trial_index)):
            this_row = trial_index[i]
            base_image = stim_list[this_row]['image_path']
            base_word = stim_list[this_row]['word_1']
            target_word = stim_list[this_row]['word_2']
            target_condition = stim_list[this_row]['condition'];
            correct_answer_1 = stim_list[this_row]['resp_1'];
            correct_answer_2 = stim_list[this_row]['resp_2'];
            base_images.append('stims/runs/' + base_image)
            base_words.append(base_word)
            target_words.append(target_word)
            target_conditions.append(target_condition)
            correct_answers_1.append(correct_answer_1)
            correct_answers_2.append(correct_answer_2)
  Routine trial_code
    CodeComponent counters
      Code Type = Both
      Begin JS Routine:
        trial_within_run += 1;
        trial_position = trial_within_experiment;
        trial_within_experiment += 1;

        psychoJS.experiment.addData("base_word", base_words[trial_position]);
        psychoJS.experiment.addData("base_image", base_images[trial_position]);
        psychoJS.experiment.addData("target_word", target_words[trial_position]);
        psychoJS.experiment.addData("target_condition", target_conditions[trial_position]);
        psychoJS.experiment.addData("correct_answer_1", correct_answers_1[trial_position]);
        psychoJS.experiment.addData("correct_answer_2", correct_answers_2[trial_position]);
        psychoJS.experiment.addData("run_num", run_counter);
        psychoJS.experiment.addData("run_file", run_file);
        psychoJS.experiment.addData("trial_within_run", trial_within_run);
        psychoJS.experiment.addData("trial_within_experiment", trial_within_experiment);

        console.log("Trial is #", trial_within_run, " in run");
        console.log("Trial is #", trial_within_experiment, " overall");
        console.log("Image for trial is ", base_images[trial_position]);
      Begin Routine:
        # increment trial counter
        trial_within_run += 1
        trial_position = trial_within_experiment # for indexing
        trial_within_experiment += 1

        # log key variables for analyses
        thisExp.addData("base_word", base_words[trial_position]);
        thisExp.addData("base_image", base_images[trial_position]);
        thisExp.addData("target_word", target_words[trial_position]);
        thisExp.addData("target_condition", target_conditions[trial_position]);
        thisExp.addData("correct_answer_1", correct_answers_1[trial_position]);
        thisExp.addData("correct_answer_2", correct_answers_2[trial_position]);
        thisExp.addData("run_num", run_counter);
        thisExp.addData("run_file", run_file);
        thisExp.addData("trial_within_run", trial_within_run);
        thisExp.addData("trial_within_experiment", trial_within_experiment);

        # print("Trial is ", trial_within_run, " of 30")
        # print("Trial is number ", trial_within_experiment, " overall")
        # print("Image for trial is ", base_images[trial_position])
  Routine end_screen
    TextComponent final_screen
      color = -1.0000, -1.0000, -1.0000
      font = Helvetica
      letterHeight = text_size
      startVal [time (s)] = 0.0
      text = $final_txt
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        qualtrics_code = image_seeds[1]
        final_txt = "You have finished this portion of the experiment. Please return to the Qualtrics survey and enter the code: " + str(qualtrics_code) + " Please copy this number. Once you've copied your ID, click Submit to finish the survey."
  Routine trial_2
    CodeComponent text_resp_code_2
      Code Type = Both
      Begin JS Routine:
        var kb;
        kb = new core.Keyboard({psychoJS: psychoJS, clock: new util.Clock(), waitForStart: true});
      Begin Routine:
        # during trial
        kb.clock.reset()  # when you want to start the timer from
        keys = kb.getKeys(['A', 'L'], waitRelease=True)
        if 'quit' in keys:
            core.quit()
        for key in keys:
            print(key.name, key.rt, key.duration)
      Each Frame:
        # if target_resp.getKeys('left') or target_resp.getKeys('right'):
        #    word_nonword.test = ' ' # disappear the text

        if target_resp.keys:
            opacity = 0
        else:
            opacity = 1
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys(["A", "L"], {"waitRelease": true});

        if (target_resp.keys) {
            opacity = 0;
        } else {
            opacity = 1;
        }
      End JS Routine:
        opacity = 1;
      End Routine:
        opacity = 1
  Routine copy_code
    TextComponent final_screen_2
      color = -1.0000, -1.0000, -1.0000
      disabled = True
      font = Helvetica
      letterHeight = instruction_text_size
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = You have finished this portion of the experiment! Please press the escape key and type the following completion code into Qualtrics. You may then close this tab!
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    TextComponent q_code
      color = 1.0000, -1.0000, 1.0000
      disabled = True
      font = Helvetica
      letterHeight = instruction_text_size
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = $pavlovia_completion_code
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  Routine end_run
    TextComponent end_run_txt
      color = -1.0000, -1.0000, -1.0000
      font = Helvetica
      letterHeight = instruction_text_size
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $end_run_msg
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    KeyboardComponent continue_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent word_nonword
      disabled = True
      image = $counterbalanced_1
      opacity [set every repeat] = image_opacity
      pos = (0, -0.1)
      size = (0.575, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent space_bar_reminder_3
      color = 0.0039, 0.0039, 0.0039
      font = Helvetica
      letterHeight = space_reminder_text_size
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = When you are ready, press the space bar to continue.
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    CodeComponent completion_code
      Code Type = Both
      disabled = True
      Begin Experiment:
        import random
        word_list = []
        word_index = []
        random_row = ""
        adjective = ""
        noun = ""

        task_dir = os.getcwd()
        # task_dir = f'{home_dir}/v1'
      Begin JS Experiment:
        word_list = []
        word_index = []
        random_row = ""
        adjective = ""
        noun = ""

        pcc = ""
      Begin JS Routine:
        import_words = new data.TrialHandler({psychoJS: psychoJS, "nReps": 1,
        "method": TrialHandler.Method.SEQUENTIAL,
        "extraInfo": expInfo,
        "originPath": undefined,
        "trialList": "random_words.csv",
        "seed": undefined,
        "name": "import_words"});

        word_list = import_words.trialList;

        word_index = list(util.range(word_num));
        word_seed = image_seeds[1]
        new_shuffle(word_index, word_seed);
        random_row_1 = word_index[1];
        random_row_2 = word_index[2];

        adjective = word_list[random_row_1]["adjectives"];
        noun = word_list[random_row_2]["nouns"];
        pcc = ((adjective.toString() + " ") + noun.toString());
        psychoJS.experiment.addData("pavlovia_completion_code", pcc);
      Begin Routine:
        import_words = data.TrialHandler(nReps=1,
            method='sequential',
            extraInfo=expInfo,
            originPath=-1,
            trialList=data.importConditions(f'{task_dir}/random_words.csv'),
            seed=None,
            name='import_words')

        word_list = import_words.trialList
        word_num = len(word_list)
        word_index = list(range(word_num))

        random.shuffle(word_index)
        random_row_1 = word_index[1]
        random_row_2 = word_index[2]

        adjective = word_list[random_row_1]['adjectives']
        noun = word_list[random_row_2]['nouns']
        pcc = str(adjective) + " " + str(noun)
        thisExp.addData("pavlovia_completion_code", pcc);
    CodeComponent kp_reset
      Code Type = Auto->JS
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      End Routine:
        targ_key_presses = []
  Routine end_run_code
    CodeComponent end_code
      Code Type = Auto->JS
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      Begin Routine:
        end_run_msg = "You have now finished " + str(run_counter) + "/6th of the task! As a reminder, please press the 'A' and 'L' keys as quickly as you can to indicate whether the target word is a real English word or nonword. When you are ready, press the space bar to continue."
  Routine completion_msg
    TextComponent final_screen_3
      color = -1.0000, -1.0000, -1.0000
      font = Helvetica
      letterHeight = instruction_text_size
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
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      text:
        You have finished this portion of the experiment!

        Please press the space bar to submit your task results, then return to Qualtrics and press the the NEXT button.
    TextComponent q_code_2
      color = 1.0000, -1.0000, 1.0000
      disabled = True
      font = Helvetica
      letterHeight = instruction_text_size
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $pcc
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    KeyboardComponent submit_task
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      disabled = True
      font = Helvetica
      letterHeight = instruction_text_size
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Finally, click on this screen and press the space bar to submit this task!
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  Routine add_instructs
    KeyboardComponent space_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instructions_txt_2
      color = -1.0000, -1.0000, -1.0000
      font = Helvetica
      letterHeight = instruction_text_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_list_2[current_instr_2]
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    CodeComponent welc_code_2
      Code Type = Both
      Before Experiment:
        current_instr_2 = 0
      Before JS Experiment:
        let current_instr_2 = 0;
      Begin Experiment:
        instruction_line_2 = ""
        instr_list_2 = []
        if word_is_left == 1:
            instr_csv_2 = f'{stim_dir}/instructions/instructions_2A.csv'
        else:
            instr_csv_2 = f'{stim_dir}/instructions/instructions_2B.csv'

        instr_obj_2 = data.TrialHandler(nReps=1,
            method='sequential',
            extraInfo=expInfo,
            originPath=-1,
            trialList=instr_csv_2,
            seed=None,
            name='instr_obj_2')
        instr_file_2 = instr_obj_2.trialList
        instr_num_2 = len(instr_file_2)
        for i in range(instr_num_2):
            instruction_line_2 = instr_file_2[i]["instr_list"]
            instr_list_2.append(instruction_line_2)
      Begin JS Experiment:
        instruction_line_2 = ""
        instr_list_2 = []
        if ((word_is_left === 1 || word_is_left === 3)) {
            instr_csv_2 = `${stim_dir}/instructions/instructions_2A.csv`;
        } else {
            instr_csv_2 = `${stim_dir}/instructions/instructions_2D.csv`;
        }
        instr_obj_2 = new TrialHandler({
         psychoJS: psychoJS,
         nReps: 1, method: TrialHandler.Method.SEQUENTIAL,
         extraInfo: expInfo, originPath: undefined,
         trialList: instr_csv_2,
         seed: undefined, name: 'instr_obj_2'
        });
        instr_file_2 = instr_obj_2.getTrialList()
        instr_num_2 = instr_file_2.length
        for (var i, _pj_c = 0, _pj_a = util.range(instr_num_2), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            instruction_line_2 = instr_file_2[i]["instr_list"]
            instr_list_2.push(instruction_line_2)
        }
      Begin JS Routine:
        kb_msg = " ";
      Begin Routine:
        kb_msg = " "
      End JS Routine:
        current_instr_2 += 1;
      End Routine:
        current_instr_2 += 1
    TextComponent space_bar_reminder_2
      color = 0.0039, 0.0039, 0.0039
      font = Helvetica
      letterHeight = space_reminder_text_size
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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  Routine mp3
    TextComponent early_key_press_reminder_2
      color = -1.0000, -1.0000, -1.0000
      font = Helvetica
      letterHeight = instruction_text_size
      startVal [time (s)] = 0.0
      text [set every frame] = $kb_msg
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    TextComponent space_bar_reminder_5
      color = 0.0039, 0.0039, 0.0039
      font = Helvetica
      letterHeight = space_reminder_text_size
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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    KeyboardComponent to_continue_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pr_early
    TextComponent early_remind
      color = -1.0000, -1.0000, -1.0000
      font = Helvetica
      letterHeight = instruction_text_size
      startVal [time (s)] = 0.0
      text [set every frame] = $pr_kb_msg
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    TextComponent space_remind2
      color = 0.0039, 0.0039, 0.0039
      font = Helvetica
      letterHeight = space_reminder_text_size
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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    KeyboardComponent to_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pr_missed
    TextComponent missed_remind
      color = -1.0000, -1.0000, -1.0000
      font = Helvetica
      letterHeight = instruction_text_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $pr_missed_msg
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    TextComponent space_remind3
      color = 0.0039, 0.0039, 0.0039
      font = Helvetica
      letterHeight = space_reminder_text_size
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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    KeyboardComponent to_continue2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pr_base
    KeyboardComponent early_keys_pr
      allowedKeys = 'a', 'l', 'A', 'L'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = base_word_start
      store = all keys
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    KeyboardComponent on_time_pr
      allowedKeys = 'a', 'l', 'A', 'L'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = base_word_start
      stopVal [duration (s)] = base_word_time
      store = all keys
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    ImageComponent pr_fixation
      image = stims/fixation_cross.jpg
      size = (1, .58)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_time
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    ImageComponent pr_image
      image [set every repeat] = $pr_base_images[pr_position]
      pos = image_position
      size = (1, 0.68)
      startVal [time (s)] = $base_image_start
      stopVal [duration (s)] = $base_image_time
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    TextComponent pr_word_1
      color = -1.0000, -1.0000, 0.0902
      font = Helvetica
      letterHeight = stim_text_size
      pos = word_position
      startVal [time (s)] = $base_word_start
      stopVal [duration (s)] = $base_word_time
      text [set every repeat] = $pr_base_words[pr_position]
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    CodeComponent key_code_pr
      Code Type = Both
      Begin Experiment:
        # set as default unless early key press detected
        pr_kb_msg = "Thank you for not making key presses before the words!"

        # Create an empty list to store the trial-by-trial key presses
        pr_key_presses = []
      Begin JS Experiment:
        pr_kb_msg = "Thank you for not making key presses before the words!";

        pr_key_presses = [];
      Begin JS Routine:
        kb = new core.Keyboard({psychoJS: psychoJS, clock: new util.Clock(), waitForStart: true});
        pr_missed_msg = " ";
      Begin Routine:
        kb = keyboard.Keyboard()
        pr_missed_msg = " "
      Each Frame:
        keys = kb.getKeys(['a', 'l', 'A', 'L'], waitRelease=False)
        if early_keys_pr.keys:
            # Update the kb_msg variable
            pr_kb_msg = "We noticed that you pressed the keyboard before seeing the words at least once. Please make sure to ONLY give a response for the words!"

        if on_time_pr.keys:
            pr_key_presses.append(keys)
            psychopy.clock.wait(0.01, hogCPUperiod=0.2)
            # print(len(pr_key_presses))
            continueRoutine = False
            # End the routine
      Each JS Frame:
        keys = kb.getKeys(["a", "l", "A", "L"], {"waitRelease": false});
        if (early_keys_pr.keys) {
            pr_kb_msg = "We noticed that you pressed the keyboard before seeing the words at least once. Please make sure to ONLY give a response for the words!";
        }

        if (on_time_pr.keys) {
            pr_key_presses.push(keys);
            // Wait for 0.01 seconds, hogging the CPU for a maximum of 0.2 seconds
            await new Promise(resolve => setTimeout(resolve, 10));
            continueRoutine = false;
        }
    ImageComponent pr_remind_2
      image = $counterbalanced_1
      pos = pr_remind_position
      size = (0.575, 0.25)
      startVal [time (s)] = $base_word_start
      stopVal [duration (s)] = $base_word_time
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  Routine pr_target
    KeyboardComponent pr_target_keys
      allowedKeys = 'a','l','A','L'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = $target_word_start
      stopVal [duration (s)] = $target_word_time
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    CodeComponent key_code_pr_2
      Code Type = Both
      Each Frame:
        keys = kb.getKeys(['a', 'l', 'A', 'L'], waitRelease=False)
        if pr_target_keys.keys:
            pr_key_presses.append(keys)
            psychopy.clock.wait(0.01, hogCPUperiod=0.2)
            # End the routine
            # print(len(pr_key_presses))
            continueRoutine = False
      Each JS Frame:
        keys = kb.getKeys(["a", "l", "A", "L"], {"waitRelease": false});
        if (pr_target_keys.keys) {
            pr_key_presses.push(keys);
            // Wait for 0.01 seconds, hogging the CPU for a maximum of 0.2 seconds
            await new Promise(resolve => setTimeout(resolve, 10));
            continueRoutine = false;
        }
      End JS Routine:
        pr_trial_threshold = Math.round(n_practice * 2 * 0.85);
        if ((pr_key_presses.length >= pr_trial_threshold)) {
            pr_missed_msg = "Thank you for responding to at least 85% of the words!";
        } else {
            pr_missed_msg = "We noticed that you didn't respond to 15% or more of the words. Please make sure to respond to all the words!";
        }
      End Routine:
        if len(pr_key_presses) >= 27:
            pr_missed_msg = "Thank you for responding to at least 85% of the words!"
        else:
            pr_missed_msg = "We noticed that you didn't respond to 15% or more of the words. Please make sure to respond to all the words!"
    ImageComponent pr_remind
      image = $counterbalanced_2
      pos = pr_remind_position
      size = (0.575, 0.25)
      startVal [time (s)] = $target_word_start
      stopVal [duration (s)] = $target_word_time
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    TextComponent pr_word_2
      color = 1.0000, -0.2235, -0.4431
      font = Helvetica
      letterHeight = stim_text_size
      pos = word_position
      startVal [time (s)] = $target_word_start
      stopVal [duration (s)] = $target_word_time
      text [set every repeat] = $pr_target_words[pr_position]
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    ImageComponent pr_image_3
      disabled = True
      image [set every repeat] = $pr_base_images[pr_position]
      pos = image_position
      size = (1, 0.68)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = $base_image_time
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  Routine target
    KeyboardComponent on_time_2
      allowedKeys = 'a','l', 'A', 'L'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = $target_word_start
      stopVal [duration (s)] = $target_word_time
      store = all keys
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    CodeComponent key_code_2
      Code Type = Both
      Each Frame:
        keys = kb.getKeys(['a', 'l', 'A', 'L'], waitRelease=False)
        if on_time_2.keys:
            key_presses.append(keys)
            # End the routine
            # print(len(pr_key_presses))
            psychopy.clock.wait(0.01, hogCPUperiod=0.2)
            continueRoutine = False
      Each JS Frame:
        keys = kb.getKeys(["a", "l", "A", "L"], {"waitRelease": false});
        if (on_time_2.keys) {
            key_presses.push(keys);
            // Wait for 0.01 seconds, hogging the CPU for a maximum of 0.2 seconds
            await new Promise(resolve => setTimeout(resolve, 10));
            continueRoutine = false;
        }
      End JS Routine:
        console.log("total key presses: ", key_presses.length);
        trial_threshold = Math.round(n_trials * 2 * 0.85);
        console.log("trial threshold is ", trial_threshold);
        if ((key_presses.length >= trial_threshold)) {
            missed_msg = "Thank you for responding to at least 85% of the words!";
        } else {
            missed_msg = "We noticed that you didn't respond to 15% or more of the words. Please make sure to respond to all the words!";
        }
      End Routine:
        print("total key presses: ", len(key_presses))

        trial_threshold = round(n_trials * 2 * 0.85)
        print("trial threshold is", trial_threshold)

        if len(key_presses) >= trial_threshold:
            missed_msg = "Thank you for responding to at least 85% of the words!"
        else:
            missed_msg = "We noticed that you didn't respond to 15% or more of the words. Please make sure to respond to all the words!"

        print(missed_msg)
    CodeComponent target_keys_2
      Code Type = Both
      disabled = True
      Begin Experiment:
        # Create an empty list to store the trial-by-trial key presses
        targ_key_presses = []
        target_kb_msg = " "
      Begin JS Experiment:
        targ_key_presses = [];
        target_kb_msg = " ";
      Begin JS Routine:
        kb = new core.Keyboard({psychoJS: psychoJS, clock: new util.Clock(), waitForStart: true});
      Begin Routine:
        kb = keyboard.Keyboard()
      Each Frame:
        keys = kb.getKeys(['a', 'l', 'A', 'L'], waitRelease=False)
        if target_resp_2.keys:
            targ_key_presses.append(keys)
            # End the routine
            continueRoutine = False
      Each JS Frame:
        keys = kb.getKeys(["a", "l", "A", "L"], {"waitRelease": false});
        if (target_resp_2.keys) {
            targ_key_presses.push(keys);
            continueRoutine = false;
        }
      End JS Routine:
        console.log(targ_key_presses.length);
        if ((targ_key_presses.length === n_trials)) {
            target_kb_msg = "Thank you for responding to all the target words!";
        } else {
            target_kb_msg = "We noticed that you missed at least one target word decision. Please make sure to respond to all the target words!";
        }
        console.log(target_kb_msg);
      End Routine:
        print(len(targ_key_presses))
        if len(targ_key_presses) == n_trials:
            target_kb_msg = "Thank you for responding to all the target words!"
        else:
            target_kb_msg = "We noticed that you missed at least one target word decision. Please make sure to respond to all the target words!"

        print(target_kb_msg)
    ImageComponent base_pair_image_2
      disabled = True
      image [set every repeat] = $base_images[trial_position]
      pos = image_position
      size = (1, 0.68)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = $target_word_time
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    TextComponent target_word_random_2
      color = 1.0000, -0.2235, -0.4431
      font = Helvetica
      letterHeight = stim_text_size
      pos = word_position
      startVal [time (s)] = $target_word_start
      stopVal [duration (s)] = $target_word_time
      text [set every repeat] = $target_words[trial_position]
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    ImageComponent image_4
      disabled = True
      image [set every repeat] = $base_images[trial_position]
      pos = image_position
      size = (1, 0.68)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = $base_image_time
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  Routine base
    KeyboardComponent early_keys
      allowedKeys = 'a', 'l', 'A', 'L'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = base_word_start
      store = all keys
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    KeyboardComponent on_time
      allowedKeys = 'a', 'l', 'A', 'L'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = base_word_start
      stopVal [duration (s)] = base_word_time
      store = all keys
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    CodeComponent key_code
      Code Type = Both
      Begin JS Routine:
        kb = new core.Keyboard({psychoJS: psychoJS, clock: new util.Clock(), waitForStart: true});

        console.log(trial_position);
        console.log(base_images[trial_position]);
      Begin Routine:
        kb = keyboard.Keyboard()
        # set as default unless early key press detected
      Each Frame:
        keys = kb.getKeys(['a', 'l', 'A', 'L'], waitRelease=False)
        if early_keys.keys:
            # Update the kb_msg variable
            kb_msg = "We noticed that you pressed the keyboard before seeing the words at least once. Please make sure to ONLY give a response for the words!"

        if on_time.keys:
            key_presses.append(keys)
            psychopy.clock.wait(0.01, hogCPUperiod=0.2)
            # print(len(pr_key_presses))
            continueRoutine = False
            # End the routine
      Each JS Frame:
        keys = kb.getKeys(["a", "l", "A", "L"], {"waitRelease": false});
        if (early_keys.keys) {
            kb_msg = "We noticed that you pressed the keyboard before seeing the words at least once. Please make sure to ONLY give a response for the words!";
        }

        if (on_time.keys) {
            key_presses.push(keys);
            // Wait for 0.01 seconds, hogging the CPU for a maximum of 0.2 seconds
            await new Promise(resolve => setTimeout(resolve, 10));
            continueRoutine = false;
        }
    ImageComponent base_pair_image
      image [set every repeat] = $base_images[trial_position]
      pos = image_position
      size = (1, 0.68)
      startVal [time (s)] = $base_image_start
      stopVal [duration (s)] = $base_image_time
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    TextComponent base_pair_word
      color = -1.0000, -1.0000, 0.0902
      font = Helvetica
      letterHeight = stim_text_size
      pos = word_position
      startVal [time (s)] = $base_word_start
      stopVal [duration (s)] = $base_word_time
      text [set every repeat] = $base_words[trial_position]
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    ImageComponent fixation_cross
      image = stims/fixation_cross.jpg
      size = (1, 0.58)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $fixation_time
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    CodeComponent early_presses
      Code Type = Both
      disabled = True
      Begin Experiment:
        # set as default unless early key press detected
        kb_msg = "Thank you for paying attention and not making key presses before the target word!"
      Begin JS Experiment:
        kb_msg = "Thank you for paying attention and not making key presses before the target word!";
      Begin JS Routine:
        kb = new core.Keyboard({psychoJS: psychoJS, clock: new util.Clock(), waitForStart: true});
      Begin Routine:
        kb = keyboard.Keyboard()
        # kb.clock.reset()  # when you want to start the timer fr
      Each Frame:
        keys = kb.getKeys(['a', 'l', 'A', 'L'], waitRelease=False)
        if early_key_press.keys:
            # Update the kb_msg variable
            kb_msg = "We noticed that you pressed the keyboard before seeing the target word. Please make sure to ONLY give a response for the target word!"
      Each JS Frame:
        keys = kb.getKeys(["a", "l", "A", "L"], {"waitRelease": false});
        if (early_key_press.keys) {
            kb_msg = "We noticed that you pressed the keyboard before seeing the target word. Please make sure to ONLY give a response for the target word!";
        }
      End JS Routine:
        console.log(kb_msg);
      End Routine:
        print(kb_msg)
  Routine early
    TextComponent early_txt
      color = -1.0000, -1.0000, -1.0000
      font = Helvetica
      letterHeight = instruction_text_size
      startVal [time (s)] = 0.0
      text [set every frame] = $kb_msg
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    TextComponent space_remind2_2
      color = 0.0039, 0.0039, 0.0039
      font = Helvetica
      letterHeight = space_reminder_text_size
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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    KeyboardComponent to_continue_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine missed
    TextComponent missed_txt
      color = -1.0000, -1.0000, -1.0000
      font = Helvetica
      letterHeight = instruction_text_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $missed_msg
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    TextComponent space_msg
      color = 0.0039, 0.0039, 0.0039
      font = Helvetica
      letterHeight = space_reminder_text_size
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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    KeyboardComponent to_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix
    ImageComponent pr_fixation_2
      image = stims/fixation_cross.jpg
      size = (1, .58)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
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  Routine practice_code
    CodeComponent get_pr_info
      Code Type = Both
      Begin Experiment:
        pr_base_image = ""
        pr_base_word = ""
        pr_target_word = ""
        pr_target_condition = ""
        pr_correct_answer_1 = ""
        pr_correct_answer_2 = ""
        pr_base_images = []
        pr_base_words = []
        pr_target_words = []
        pr_target_conditions = []
        pr_correct_answers_1 = []
        pr_correct_answers_2 = []
      Begin JS Experiment:
        pr_base_image = "";
        pr_base_word = "";
        pr_target_word = "";
        pr_target_condition = "";
        pr_correct_answer_1 = "";
        pr_correct_answer_2 = "";
        pr_base_images = [];
        pr_base_words = [];
        pr_target_words = [];
        pr_target_conditions = [];
        pr_correct_answers_1 = [];
        pr_correct_answers_2 = [];
      Begin JS Routine:
        pr_file = `runs/run_practice.csv`

        pr_stim = new TrialHandler({
            psychoJS: psychoJS,
            nReps: 1,
            method: TrialHandler.Method.SEQUENTIAL,
            extraInfo: expInfo,
            originPath: undefined,
            trialList: ((`${stim_dir}/` + pr_file)),
            seed: undefined,
            name: 'pr_stim'});

        pr_stim_list = pr_stim.trialList;
        pr_index = Array.from({length: 16}, (_, i) => i + 1);

        /* use unique seeds to shuffle images within trials */
        pr_index = seededShuffle(pr_index, pid);
        console.log("pr index list is: ", pr_index)
        pr_this_row = "";

        for (var i, _pj_c = 0, _pj_a = util.range(pr_index.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            pr_this_row = pr_index[i] - 1;
            console.log("pr_this_row: ", pr_this_row)

            // Check if the index is out of bounds
            if(pr_this_row < 0 || pr_this_row >= pr_stim_list.length) {
                console.warn(`Invalid index: ${pr_this_row}. Skipping this row.`);
                continue;
            }

            // Safely try to access properties
            let row_data = pr_stim_list[pr_this_row];
            if(!row_data || !row_data["image_path"] || !row_data["base_pair"] || !row_data["test_word"] || !row_data["condition"]) {
                console.warn(`Incomplete or missing data for index: ${pr_this_row}. Skipping this row.`);
                continue;
            }

            pr_base_image = row_data["image_path"];
            pr_base_word = row_data["base_pair"];
            pr_target_word = row_data["test_word"];
            pr_target_condition = row_data["condition"];

            pr_base_images.push(pr_base_image);
            pr_base_words.push(pr_base_word);
            pr_target_words.push(pr_target_word);
            pr_target_conditions.push(pr_target_condition);
        }
      Begin Routine:
        # get run information
        pr_file = "runs/run_practice.csv"

        pr_stim = data.TrialHandler(nReps=1,
            method='sequential',
            extraInfo=expInfo,
            originPath=-1,
            trialList=data.importConditions(f'{stim_dir}/' + pr_file),
            seed=None,
            name='pr_stim')

        pr_stim_list = pr_stim.trialList
        pr_index = list(range(16))
        # pid is used to generate individualized seeds
        # this allows randomized image orders for all runs
        # change seed below to pid for consistent image order
        random.seed(image_seeds[1])
        random.shuffle(pr_index)

        for i in range(len(pr_index)):
            pr_this_row = pr_index[i]
            pr_base_image = pr_stim_list[pr_this_row]['image_path']
            pr_base_word = pr_stim_list[pr_this_row]['base_pair']
            pr_target_word = pr_stim_list[pr_this_row]['test_word']
            pr_target_condition = pr_stim_list[pr_this_row]['condition'];
            pr_base_images.append(pr_base_image)
            pr_base_words.append(pr_base_word)
            pr_target_words.append(pr_target_word)
            pr_target_conditions.append(pr_target_condition)
    CodeComponent counters_2
      Code Type = Both
      Begin Experiment:
        # initialize counters
        pr_counter = 0
      Begin JS Experiment:
        /* initialize counters */
        pr_counter = 0;
      Begin JS Routine:
        pr_position = pr_counter;
        pr_counter += 1;
      Begin Routine:
        pr_position = pr_counter
        pr_counter += 1
  Routine select_routine
    CodeComponent open_files
      Code Type = Both
      Before JS Experiment:
        function simpleChecksum(str) {
            return Array.from(str).reduce((sum, char) => sum + char.charCodeAt(0), 0);
        }

        function generateRunSeed(pid, runNumber) {
            let modifiedPid = pid.toString() + runNumber.toString();
            return simpleChecksum(modifiedPid);
        }
      Begin JS Routine:
        run_file = run_files[1];
        console.log("run file is: ", run_file)

        run_stim = new TrialHandler({
            psychoJS: psychoJS,
            nReps: 1,
            method: TrialHandler.Method.SEQUENTIAL,
            extraInfo: expInfo,
            originPath: undefined,
            trialList: ((`${stim_dir}/` + run_file)),
            seed: undefined,
            name: 'run_stim'});

        stim_list = run_stim.trialList;

        this_row = "";
        for (var i, _pj_c = 0, _pj_a = util.range(stim_list.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            this_row = i;
            // this_row = trial_index[i] - 1;
            console.log(this_row);

            // Check if the index is out of bounds
            if(this_row < 0 || this_row >= stim_list.length) {
                console.warn(`Invalid index: ${this_row}. Skipping this row.`);
                continue;
            }

            // Safely try to access properties
            let row_data = stim_list[this_row];
            if(!row_data ||
               !row_data["image_path"] ||
               !row_data["word_1"] ||
               !row_data["word_2"] ||
               !row_data["condition"] ||
               !row_data["resp_1"] ||
               !row_data["resp_2"]) {
                console.warn(`Incomplete or missing data for index: ${this_row}. Skipping this row.`);
                continue;
            }

            base_image = row_data["image_path"];
            console.log(base_image);
            base_word = row_data["word_1"];
            target_word = row_data["word_2"];
            target_condition = row_data["condition"];
            correct_answer_1 = row_data["resp_1"];
            correct_answer_2 = row_data["resp_2"];

            base_images.push("stims/runs/" + base_image);
            base_words.push(base_word);
            target_words.push(target_word);
            target_conditions.push(target_condition);
            correct_answers_1.push(correct_answer_1);
            correct_answers_2.push(correct_answer_2);
        }
  Routine remind
    KeyboardComponent space_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent space_remind_2
      color = 0.0039, 0.0039, 0.0039
      font = Helvetica
      letterHeight = space_reminder_text_size
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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    CodeComponent counterbal_2
      Code Type = Both
      Begin Experiment:
        for word_is_left in range(1, 5):
            if word_is_left == 1:
                counterbalanced_1 = f'{stim_dir}/counterbalance/good_on_left.jpg'
                counterbalanced_2 = f'{stim_dir}/counterbalance/word_on_left.jpg'
            elif word_is_left == 2:
                # Statements for the second combination
                counterbalanced_1 = f'{stim_dir}/counterbalance/good_on_left'
                counterbalanced_2 = f'{stim_dir}/counterbalance/word_on_right'
            elif word_is_left == 3:
                # Statements for the third combination
                counterbalanced_1 = f'{stim_dir}/counterbalance/good_on_right'
                counterbalanced_2 = f'{stim_dir}/counterbalance/word_on_left'
            elif word_is_left == 4:
                counterbalanced_1 = f'{stim_dir}/counterbalance/good_on_right.jpg'
                counterbalanced_2 = f'{stim_dir}/counterbalance/word_on_right.jpg'
            print(f'Combination {word_is_left}: counterbalanced_1 = {counterbalanced_1}, counterbalanced_2 = {counterbalanced_2}')
      Begin JS Experiment:
        counterbalanced_1 = "";
        counterbalanced_2 = "";
        instr_counter = "";

        if ((word_is_left === 1)) {
            counterbalanced_1 = `${stim_dir}/counterbalance/good_on_left.jpg`;
            counterbalanced_2 = `${stim_dir}/counterbalance/word_on_left.jpg`;
            instr_counter = `${stim_dir}/counterbalance/word_on_left_full.jpg`;
        } else {
            counterbalanced_1 = `${stim_dir}/counterbalance/good_on_right.jpg`;
            counterbalanced_2 = `${stim_dir}/counterbalance/word_on_right.jpg`;
            instr_counter = `${stim_dir}/counterbalance/word_on_right_full.jpg`;
         }
    ImageComponent image
      image = $instr_counter
      pos = image_position
      size = (1, .35)
      startVal [time (s)] = 0.0
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  Routine final_direct
    KeyboardComponent space_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent space_remind_3
      color = -1.0000, -1.0000, -1.0000
      font = Helvetica
      letterHeight = instruction_text_size
      startVal [time (s)] = 0.0
      text = You'll now complete a few practice rounds to get familiar with the task. Practice rounds include key reminders, which won't appear in the actual task. Press the space bar to begin the practice rounds.
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    CodeComponent code_2
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        final_msg = "You'll now complete a few practice rounds to get familiar with the task. Practice rounds include key reminders, which won't appear in the actual task. Press the space bar to begin the practice rounds."
Flow
  Routine init_code
  LoopInitiator instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = instr_num
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    Routine welcome
  LoopTerminator instructions
  Routine remind
  Routine final_direct
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = stims/runs/run_practice.csv
    loopType = random
    nReps = 1
    random seed = pid
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    conditions:
      [OrderedDict([('image_path', 'stims/practice/1.jpg'), ('base_pair', 'disclosing'), ('test_word', 'pressuring'), ('condition', 'ND')]),
      OrderedDict([('image_path', 'stims/practice/2.jpg'), ('base_pair', 'flirting'), ('test_word', 'seducing'), ('condition', 'NN')]),
      OrderedDict([('image_path', 'stims/practice/3.jpg'), ('base_pair', 'cranking'), ('test_word', 'surprising'), ('condition', 'ID')]),
      OrderedDict([('image_path', 'stims/practice/4.jpg'), ('base_pair', 'comforting'), ('test_word', 'measuring'), ('condition', 'DI')]),
      OrderedDict([('image_path', 'stims/practice/5.jpg'), ('base_pair', 'organizing'), ('test_word', 'hunting'), ('condition', 'DN')]),
      OrderedDict([('image_path', 'stims/practice/6.jpg'), ('base_pair', 'blossoming'), ('test_word', 'drushing'), ('condition', 'IC')]),
      OrderedDict([('image_path', 'stims/practice/7.jpg'), ('base_pair', 'punishing'), ('test_word', 'glascking'), ('condition', 'DC')]),
      OrderedDict([('image_path', 'stims/practice/8.jpg'), ('base_pair', 'disagreeing'), ('test_word', 'multiplying'), ('condition', 'NI')]),
      OrderedDict([('image_path', 'stims/practice/9.jpg'), ('base_pair', 'accusing'), ('test_word', 'blaming'), ('condition', 'DD')]),
      OrderedDict([('image_path', 'stims/practice/10.jpg'), ('base_pair', 'swerting'), ('test_word', 'deiphing'), ('condition', 'CC')]),
      OrderedDict([('image_path', 'stims/practice/11.jpg'), ('base_pair', 'twurched '), ('test_word', 'depressed'), ('condition', 'CD')])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
    Routine practice_code
    Routine pr_base
    Routine fix
    Routine pr_target
  LoopTerminator practice
  Routine pr_early
  Routine pr_missed
  LoopInitiator instructions_2 loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = instr_num_2
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    Routine add_instructs
  LoopTerminator instructions_2
  Routine select_routine
  LoopInitiator runs loopType="TrialHandler"
    loopType = sequential
    nReps = n_runs
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    Routine run_code
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = n_trials
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      Routine trial_code
      Routine base
      Routine fix
      Routine target
    LoopTerminator trials
    Routine early
    Routine missed
    Routine end_run
  LoopTerminator runs
  Routine completion_msg
